CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does contain "09_21")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (directory does contain "Plate")
    Name to assign these images:original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "RESULT")
    Name to assign these images:cellIQ
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:cellIQ
    Conversion method:Split
    Image type:HSV
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    Convert hue to gray?:No
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    Convert saturation to gray?:Yes
    Name the output image:saturation
    Convert value to gray?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:saturation
    Name the primary objects to be identified:cellMarker
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:cellMarker
    Name the output objects:cells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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    Retain the outlines of the identified objects?:No
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:cells

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:original
    Select objects to measure:cells

MeasureObjectRadialDistribution:[module_num:10|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:original
    Select objects to measure:cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:cells
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:12|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:original
    Select objects to measure:cells
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

ExportToDatabase:[module_num:13|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cells
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:cells
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CPA images via URL?:No
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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