CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*Jaakko/(?P<Plate>.*)/.*
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "c0")
    Name to assign these images:fibronectin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:fibronectin
    Name the output image:fibronectinSmooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:fibronectinSmooth
    Name the primary objects to be identified:anchor
    Typical diameter of objects, in pixel units (Min,Max):300,600
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.2
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
Smooth:[module_num:7|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
    Select the input image:DAPI
    Name the output image:DAPISmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DAPISmooth
    Name the primary objects to be identified:nucleus
    Typical diameter of objects, in pixel units (Min,Max):100,300
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:anchor
    Select objects to measure:nucleus
    Calculate the Zernike features?:No

CalculateMath:[module_num:10|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
    Name the output measurement:xDistanceFromNucleus
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:anchor
    Select the minuend measurement:Location_Center_X
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:nucleus
    Select the subtrahend measurement:Location_Center_X
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:anchor
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    Select outline color:#1E90FF
    Load outlines from an image or objects?:Objects
    Select objects to display:nucleus

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlays
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
FlagImage:[module_num:13|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_multiple_anchors
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Measurements for all objects in each image
    Select the object to be used for flagging:anchor
    Which measurement?:Number_Object_Number
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1.0
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
FlagImage:[module_num:14|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_no_nucleus
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Measurements for all objects in each image
    Select the object to be used for flagging:nucleus
    Which measurement?:Number_Object_Number
    Flag images based on low values?:Yes
    Minimum value:0.0
    Flag images based on high values?:Yes
    Maximum value:1.0
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_nucleus,Image|Count_anchor,Image|FileName_DAPI,Image|FileName_fibronectin,Image|FileName_overlay,Image|PathName_DAPI,Image|PathName_fibronectin,Image|PathName_overlay,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,nucleus|AreaShape_Center_Y,nucleus|AreaShape_Center_X,nucleus|AreaShape_Area,anchor|Location_Center_Y,anchor|Location_Center_X,anchor|Math_xDistanceFromNucleus,anchor|AreaShape_Orientation
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
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
ExportToDatabase:[module_num:16|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
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    Create a CellProfiler Analyst workspace file?:No
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