CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does containregexp "C08")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Site>[0-9]{2})d(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DAPI
    Name the output image:SmoothDAPI
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
MeasureImageQuality:[module_num:6|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notes:['Measure DAPI focus.']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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:DAPI
    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:40
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
FlagImage:[module_num:7|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notes:['Stop if DAPI is not in focus.']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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_Blur
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_DAPI
    Flag images based on low values?:Yes
    Minimum value:-1.5
    Flag images based on high values?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Red
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:Red
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract

MeasureCorrelation:[module_num:10|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notes:['Measure correlation between DAPI and Red to catch LMU CellInsight imaging errors.']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
    Hidden:2
    Hidden:1
    Select an image to measure:DAPI
    Select an image to measure:CorrRed
    Select where to measure correlation:Across entire image
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
FlagImage:[module_num:11|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notes:['Stop if it seems that DAPI and Red are the same.']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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_DapiOnRedCh
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_DAPI_CorrRed
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.4
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:SmoothDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
Smooth:[module_num:13|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enabled:False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
    Select the input image:CorrRed
    Name the output image:SmoothRed
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
    Edge intensity difference:0.3
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
RunImageJ:[module_num:14|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("Misc...", "divide=Infinity run debug");\\u000arename("input");\\u000arun("LoG 3D...", "sigmax=2 sigmay=2 sigmaz=2 displaykernel=0 volume=1");\\u000aselectWindow("LoG of input");\\u000arename("output");\\u000aselectWindow("input");\\u000aclose();\\u000aselectWindow("output");\\u000arun("Invert");\\u000arun("8-bit");
    Macro language:Java
    Input the currently active image in ImageJ?:Yes
    Select the input image:CorrRed
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:LoGRed
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

ApplyThreshold:[module_num:15|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
    Select the input image:LoGRed
    Name the output image:ThreshSpots
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:10

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:ThreshSpots
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.0001
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
MeasureObjectIntensity:[module_num:17|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
    Hidden:1
    Select an image to measure:CorrRed
    Select objects to measure:Spots

FilterObjects:[module_num:18|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
    Name the output objects:BrightSpots
    Select the object to filter:Spots
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_CorrRed
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0015
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:19|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
    Select objects to be masked:BrightSpots
    Name the masked objects:MaskedSpots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

RelateObjects:[module_num:20|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
    Select the input child objects:MaskedSpots
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:21|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notes:['Add also Spots as child object of Nuclei to have other options in the pull down menu. This is a hack.']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
    Select the input child objects:BrightSpots
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:22|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
    Name the output objects:NucleiWithSpots
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_BrightSpots_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:23|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
    Name the output objects:NucleiWithoutSpots
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_BrightSpots_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5

GrayToColor:[module_num:24|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enabled:False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
    Select a color scheme:RGB
    Select the image to be colored red:Red
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    Select the image to be colored blue:DAPI
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Red
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:NucleiWithSpots
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    Select outline color:#ADD8E6
    Load outlines from an image or objects?:Objects
    Select objects to display:NucleiWithoutSpots

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_spots
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Select colormap:jet
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/input/LMU-active2/users/FROM_CSC_LMU/CellInsight/jbarlund
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
SaveImages:[module_num:27|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Red
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_red
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/input/LMU-active2/users/FROM_CSC_LMU/CellInsight/jbarlund
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
ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_Nuclei,Image|ImageQuality_PowerLogLogSlope_DAPI,Image|PathName_DAPI,Image|PathName_OrigOverlay,Image|PathName_Red,Image|FileName_DAPI,Image|FileName_Red,Image|FileName_OrigOverlay,Image|Metadata_QCFlag_DapiOnRedCh,Image|Metadata_QCFlag_Blur,Image|Metadata_Plate,Image|Metadata_Well,Image|Metadata_Site,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Nuclei|Number_Object_Number,Nuclei|Children_MaskedSpots_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
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
ExportToDatabase:[module_num:29|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CPA images via URL?:No
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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