CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124150255
GitHash:2.1.0.Release
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot containregexp "LUT")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:Dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:Dapi
    Name the output image:DapiSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DapiSmooth
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
Smooth:[module_num:7|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
    Select the input image:Green
    Name the output image:GreenSmooth
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:Yes
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    Edge intensity difference:0.1
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GreenSmooth
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:Green
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:12|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
    Name the output objects:FilteredCytoplasm
    Select the object to filter:Cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:2000

MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:Green
    Select objects to measure:FilteredCytoplasm

CalculateMath:[module_num:14|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
    Name the output measurement:NI
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_IntegratedIntensity_Green
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:FilteredCytoplasm
    Select the denominator measurement:Intensity_IntegratedIntensity_Green
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:15|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
    Name the output measurement:NAI
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_Green
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:FilteredCytoplasm
    Select the denominator measurement:Intensity_MeanIntensity_Green
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|/output/w118
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_Nuclei,Image|PathName_Dapi,Image|PathName_Green,Image|FileName_Dapi,Image|FileName_Green,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Nuclei|Intensity_IntegratedIntensity_Green,Nuclei|Intensity_MeanIntensity_Green,Nuclei|Math_NI,Nuclei|Math_NAI
    Representation of Nan/Inf:NaN
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