CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:FITC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:TRITC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Drag5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:Drag5
    Name the output image:smoothDrag5
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:smoothDrag5
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:nuclei
    Name the objects to be identified:cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:TRITC
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:cells
    Select the smaller identified objects:nuclei
    Name the tertiary objects to be identified:cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:FITC
    Select objects to measure:cytoplasm

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:cells
    Select objects to measure:nuclei
    Select objects to measure:cytoplasm
    Calculate the Zernike features?:No

CalculateMath:[module_num:11|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
    Name the output measurement:Measurement
    Operation:Add
    Select the first operand measurement type:Object
    Select the first operand objects:cytoplasm
    Select the first operand measurement:Intensity_MeanIntensity_FITC
    Multiply the above operand by:255.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:cytoplasm
    Select the second operand measurement:Intensity_MeanIntensity_FITC
    Multiply the above operand by:0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:cytoplasm|Intensity_IntegratedIntensity_FITC,cytoplasm|Intensity_MeanIntensity_FITC,cytoplasm|AreaShape_Area,cytoplasm|Math_Measurement,Image|Count_nuclei,Image|FileName_FITC,Image|FileName_TRITC,Image|FileName_Drag5,Image|PathName_FITC,Image|PathName_TRITC,Image|PathName_Drag5,nuclei|AreaShape_Area,cells|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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