CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Site>[0-9]{2})d(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:MTA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:Lana
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectIntensity:[module_num:6|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
    Hidden:2
    Select an image to measure:GFP
    Select an image to measure:Lana
    Select objects to measure:Nuclei

FilterObjects:[module_num:7|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
    Name the output objects:GFPpositive
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.002
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:8|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
    Name the output objects:GFPnegative
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_GFP
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.002

ClassifyObjects:[module_num:9|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_MeanIntensity_GFP
    Select bin spacing:Evenly spaced bins
    Number of bins:1
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:0.002
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:Yes
    Enter the bin names separated by commas:neg,pos
    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:MTA
    Select objects to measure:GFPpositive

RunImageJ:[module_num:11|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("Misc...", "divide=Infinity run debug");\\u000arename("input");\\u000arun("LoG 3D...", "sigmax=1 sigmay=1 sigmaz=1 displaykernel=0 volume=1");\\u000aselectWindow("LoG of input");\\u000arename("output");\\u000aselectWindow("input");\\u000aclose();\\u000aselectWindow("output");\\u000arun("Invert");\\u000arun("8-bit");
    Macro language:Java
    Input the currently active image in ImageJ?:Yes
    Select the input image:Lana
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:ImageJImage
    Name the primary objects to be identified:SpotsThrLow
    Typical diameter of objects, in pixel units (Min,Max):1,6
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
FilterObjects:[module_num:13|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
    Name the output objects:LanaDim
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_Lana
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.003

FilterObjects:[module_num:14|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
    Name the output objects:LanaBright
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_Lana
    Filter using a minimum measurement value?:Yes
    Minimum value:0.003
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:15|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
    Select objects to be masked:SpotsThrLow
    Name the masked objects:SpotsLanaDim
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LanaDim
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:ImageJImage
    Name the primary objects to be identified:SpotsThrHigh
    Typical diameter of objects, in pixel units (Min,Max):1,6
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
MaskObjects:[module_num:17|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
    Select objects to be masked:SpotsThrHigh
    Name the masked objects:SpotsLanaBright
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LanaBright
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

RelateObjects:[module_num:18|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
    Select the input child objects:SpotsLanaDim
    Select the input parent objects:GFPnegative
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:19|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
    Select the input child objects:SpotsLanaBright
    Select the input parent objects:GFPnegative
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:20|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
    Select the input child objects:SpotsLanaDim
    Select the input parent objects:GFPpositive
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:21|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
    Select the input child objects:SpotsLanaBright
    Select the input parent objects:GFPpositive
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:22|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
    Select the input child objects:SpotsLanaDim
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:23|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
    Select the input child objects:SpotsLanaBright
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Lana
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#0080FF
    Load outlines from an image or objects?:Objects
    Select objects to display:GFPnegative
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:GFPpositive
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    Select outline color:#FF8080
    Load outlines from an image or objects?:Objects
    Select objects to display:SpotsLanaDim
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:SpotsLanaBright

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Lana
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_spots
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|images
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/input/LMU-active2/users/FROM_CSC_LMU/CellInsight/vahakosk
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
ExportToDatabase:[module_num:26|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:GFPnegative,GFPpositive,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_GFPnegative,Image|Count_LanaBright,Image|Count_LanaDim,Image|Count_GFPpositive,Image|Count_Nuclei,Image|FileName_DNA,Image|FileName_OrigOverlay,Image|FileName_Lana,Image|FileName_GFP,Image|FileName_MTA,Image|Classify_neg_NumObjectsPerBin,Image|Classify_neg_PctObjectsPerBin,Image|Classify_pos_NumObjectsPerBin,Image|Classify_pos_PctObjectsPerBin,Image|Metadata_Plate,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Well,Image|Metadata_Site,Image|Metadata_ChannelNumber,GFPnegative|Children_SpotsLanaDim_Count,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
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