CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})f(?P<Site>[0-9]{2})d(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:Alexa488
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DAPI
    Name the output image:dapismooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:dapismooth
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/output/mjjames
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_Nuclei,Image|FileName_DAPI
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
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