CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w2") (file does contain "cp_masks")
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    Name to assign these objects:Cells
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "w2") (file doesnot contain "cp_masks")
    Name to assign these images:w2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:w3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:w2
    Name the output image:RescaleIntensityW2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.02
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:RescaleIntensityW2
    Name the output image:EnhanceSpots
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Smooth:[module_num:7|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
    Select the input image:EnhanceSpots
    Name the output image:SmoothSpots
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:SmoothSpots
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):3,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:2.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:9|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
    Parent objects:Cells
    Child objects:Spots
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SpotsInCells
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:w2, w3
    Select objects to measure:Cells, SpotsInCells

MeasureTexture:[module_num:11|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
    Select images to measure:w2, w3
    Select objects to measure:Cells, SpotsInCells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Cells, SpotsInCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToDatabase:[module_num:13|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:cellpose_example.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:Yes
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:SpotsInCells|AreaShape_Area,SpotsInCells|Intensity_IntegratedIntensity_w2,SpotsInCells|Intensity_IntegratedIntensity_w3,SpotsInCells|Intensity_MeanIntensity_w2,SpotsInCells|Intensity_MeanIntensity_w3,Cells|Intensity_MeanIntensity_w3,Cells|Intensity_MeanIntensity_w2,Cells|Intensity_IntegratedIntensity_w3,Cells|Intensity_IntegratedIntensity_w2,Cells|Children_Spots_Count,Spots|Distance_Centroid_Cells,Spots|Distance_Minimum_Cells
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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