CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:CH1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:CH2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3")
    Name to assign these images:CH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CH3
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CH1
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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
    Input:Nuclei
    Object:CentralNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:110
    Filter using a maximum measurement value?:Yes
    Maximum value:140
    Select the measurement to filter by:AreaShape_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:110
    Filter using a maximum measurement value?:Yes
    Maximum value:140

FilterObjects:[module_num:9|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
    Input:Cells
    Object:CentralCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:110
    Filter using a maximum measurement value?:Yes
    Maximum value:140
    Select the measurement to filter by:AreaShape_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:110
    Filter using a maximum measurement value?:Yes
    Maximum value:140

MeasureObjectIntensityDistribution:[module_num:10|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
    Hidden:2
    Hidden:1
    Hidden:1
    Hidden:2
    Calculate intensity Zernikes?:None
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    Select an image to measure:CH2
    Select an image to measure:CH1
    Select objects to measure:CentralCells
    Object to use as center?:These objects
    Select objects to use as centers:Cells
    Scale the bins?:Yes
    Number of bins:5
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    Image:CH1
    Objects to display:Do not use
    Number of bins:4
    Measurement:Mean Fraction
    Color map:Default
    Save display as image?:No
    Output image name:Heatmap
    Image:CH2
    Objects to display:Do not use
    Number of bins:10
    Measurement:Mean Fraction
    Color map:Default
    Save display as image?:No
    Output image name:Heatmap

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :CentralCells|RadialDistribution_MeanFrac_CH1_1of5,CentralCells|RadialDistribution_MeanFrac_CH1_4of5,CentralCells|RadialDistribution_MeanFrac_CH1_5of5,CentralCells|RadialDistribution_MeanFrac_CH1_2of5,CentralCells|RadialDistribution_MeanFrac_CH1_3of5
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CH1
    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:CentralCells

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:CH1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_central_cells
    Saved file format:png
    Output file location:Elsewhere...|/home/hajaalin/tmp/paveliev/output/CellProfiler/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/home/hajaalin/tmp/paveliev/output
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