CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^t(?P<TimeStep>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[/\\](?P<Plate>.*)[/\\]timepoint0$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:2
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:w1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:w2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/home/user/tmp/cpout/naveed/illum_calc/25112024/IllumBackgroundW2.npy
    Name to assign this image:IllumBackgroundW2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/home/user/tmp/cpout/naveed/illum_calc/25112024/IllumBackgroundW1.npy
    Name to assign this image:IllumBackgroundW1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:w1
    Name the output image:CorrW1
    Select the illumination function:IllumBackgroundW1
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:6|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
    Select the input image:w2
    Name the output image:CorrW2
    Select the illumination function:IllumBackgroundW2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:CorrW1
    Select method for constructing file names:From image filename
    Select image name for file prefix:w1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corr_bg
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|illum_corr/\g<Plate>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CorrW2
    Select method for constructing file names:From image filename
    Select image name for file prefix:w2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corr_bg
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|illum_corr/\g<Plate>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
