CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^t(?P<TimeStep>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[/\\](?P<Plate>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:w1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:w2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:w1
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:w2
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:w2
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):3,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:3
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:10|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
    Parent objects:Cells
    Child objects:Spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:11|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
    Parent objects:Cytoplasm
    Child objects:Spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:12|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
    Parent objects:Nuclei
    Child objects:Spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellsOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

OverlayObjects:[module_num:14|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enabled:False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
    Input:EnhanceOrSuppressFeatures
    Name the output image:SpotsOverlay
    Objects:Spots
    Opacity:1

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:Yes
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    Name the output image:SpotsOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Spots

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:CellsOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:w1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images/\g<Plate>/overlay/cells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:SpotsOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:w1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_spots
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images/\g<Plate>/overlay/spots
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:18|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:Yes
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Children_Spots_Count,Nuclei|Children_Spots_Count,Cells|Children_Spots_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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