CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory does contain "EBSS") (directory doesnot contain "Bafilo")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{1,2})_.*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "LC3")
    Name to assign these images:LC3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DAPI
    Name the output image:SmoothDAPI
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:SmoothDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:LC3
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    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
RunImageJ:[module_num:8|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("Misc...", "divide=Infinity run debug");\\u000arename("input");\\u000arun("LoG 3D...", "sigmax=2 sigmay=2 sigmaz=2 displaykernel=0 volume=1");\\u000aselectWindow("LoG of input");\\u000arename("output");\\u000aselectWindow("input");\\u000aclose();\\u000aselectWindow("output");\\u000arun("Invert");\\u000arun("8-bit");\\u000a//run("adjust threshold")\\u000a//run("Auto Threshold", "method=Minimum white");\\u000a//run("Auto Threshold", "method=Otsu white");\\u000a//run("Auto Threshold", "method=Moments white");\\u000a\\u000a\\u000a
    Macro language:Python
    Input the currently active image in ImageJ?:Yes
    Select the input image:LC3
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:LoG_LC3
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

ApplyThreshold:[module_num:9|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
    Select the input image:LoG_LC3
    Name the output image:ThreshSpots
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:ThreshSpots
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:SpotOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.001
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
MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:LC3
    Select objects to measure:Spots

FilterObjects:[module_num:12|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
    Name the output objects:BrightSpots
    Select the object to filter:Spots
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_LC3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.12
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:Cells

FilterObjects:[module_num:14|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
    Name the output objects:CellsGFP
    Select the object to filter:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:15|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
    Name the output objects:CellsNoGFP
    Select the object to filter:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_GFP
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.15

MaskObjects:[module_num:16|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
    Select objects to be masked:BrightSpots
    Name the masked objects:SpotsInCellsGFP
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellsGFP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:17|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
    Select objects to be masked:BrightSpots
    Name the masked objects:SpotsInCellsNoGFP
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellsNoGFP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

GrayToColor:[module_num:18|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
    Select a color scheme:RGB
    Select the image to be colored red:LC3
    Select the image to be colored green:GFP
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    Name the output image:GFPLC3
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFPLC3
    Name the output image:spotsImage
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:pink
    Load outlines from an image or objects?:Objects
    Select objects to display:SpotsInCellsGFP
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:CellsGFP
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    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:Yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:CellsNoGFP
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    Select outline color:White
    Load outlines from an image or objects?:Objects
    Select objects to display:SpotsInCellsNoGFP

RelateObjects:[module_num:20|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
    Select the input child objects:SpotsInCellsGFP
    Select the input parent objects:CellsGFP
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:21|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
    Select the input child objects:SpotsInCellsNoGFP
    Select the input parent objects:CellsNoGFP
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
MaskObjects:[module_num:22|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
    Select objects to be masked:CellsGFP
    Name the masked objects:CellsGFPMinusSpots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:SpotsInCellsGFP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

MaskObjects:[module_num:23|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
    Select objects to be masked:CellsNoGFP
    Name the masked objects:CellsNoGFPMinusSpots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:SpotsInCellsNoGFP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:24|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
    Hidden:1
    Select an image to measure:LC3
    Select objects to measure:SpotsInCellsGFP
    Select objects to measure:CellsGFPMinusSpots
    Select objects to measure:SpotsInCellsNoGFP
    Select objects to measure:CellsNoGFPMinusSpots

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|/output/GFP2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:SpotsInCellsNoGFP|Intensity_MeanIntensity_LC3,CellsNoGFP|Children_SpotsInCellsNoGFP_Count,CellsGFPMinusSpots|Intensity_MeanIntensity_LC3,Image|Count_CellsNoGFP,Image|Count_CellsGFP,Image|Count_Nuclei,Image|FileName_DAPI,Image|FileName_GFP,Image|FileName_LC3,Image|PathName_DAPI,Image|PathName_GFP,Image|PathName_LC3,CellsGFP|Number_Object_Number,CellsGFP|Children_SpotsInCellsGFP_Count,SpotsInCellsGFP|Intensity_MeanIntensity_LC3,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,CellsNoGFPMinusSpots|Intensity_MeanIntensity_LC3
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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
ExportToDatabase:[module_num:26|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CPA images via URL?:No
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:spotsImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:LC3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_spots
    Saved file format:tif
    Output file location:Elsewhere...|/output/GFP2/images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder sub-folder|new_images
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